PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1470, 956]
  expName = signal detection
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine trial
    CodeComponent keypress
      Code Type = Auto->JS
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      Each Frame:
        # Define the correct key for this trial (e.g., from your conditions file)
        correct_key = 'up'  # Change this depending on the correct answer for the trial

        # Get the key pressed by the participant
        keys = event.getKeys(keyList=['up', 'down'])

        if 'up' in keys:
            thisExp.addData('keyPressed', 'up')
            if 'up' == correct_key:  # Compare with the correct key
                thisExp.addData('correct', 1)  # 1 means correct
            else:
                thisExp.addData('correct', 0)  # 0 means incorrect
            continueRoutine = False  # End the routine if you want to move to the next trial

        if 'down' in keys:
            thisExp.addData('keyPressed', 'down')
            if 'down' == correct_key:  # Compare with the correct key
                thisExp.addData('correct', 1)  # 1 means correct
            else:
                thisExp.addData('correct', 0)  # 0 means incorrect
            continueRoutine = False  # End the routine if you want to move to the next trial
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    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            tilt = int(randint(-5,5))
            corrAns = 'down'
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
