PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = word_priming
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine testphase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine studyphase
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    TextComponent Studytext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_Word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word_priming_cond_r1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_Word', 'book')]),
      OrderedDict([('Study_Word', 'cushion')]),
      OrderedDict([('Study_Word', 'phone')]),
      OrderedDict([('Study_Word', 'marble')]),
      OrderedDict([('Study_Word', 'board')]),
      OrderedDict([('Study_Word', 'laptop')]),
      OrderedDict([('Study_Word', 'chart')]),
      OrderedDict([('Study_Word', 't-shirt')]),
      OrderedDict([('Study_Word', 'mouse')]),
      OrderedDict([('Study_Word', 'pastry')]),
      OrderedDict([('Study_Word', 'case')]),
      OrderedDict([('Study_Word', 'cruise')]),
      OrderedDict([('Study_Word', 'police')]),
      OrderedDict([('Study_Word', 'keys')]),
      OrderedDict([('Study_Word', 'poster')])]
    Routine studyphase
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = word_priming_cond_r2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('References', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('References', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t'), ('References', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('References', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_as_tr_'), ('References', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('References', 'case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_is_'), ('References', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_li_e'), ('References', 'police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('References', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_r'), ('References', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('References', 'board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('References', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('References', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('References', 'book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io'), ('References', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('References', 'table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('References', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('References', 'vase'), ('old_new', 'new')])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
    Routine testphase
  LoopTerminator trials_2
