PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = emotion_valence_word_recall
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine word_presentation
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    PolygonComponent a
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Word
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  Routine recall_phase
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Create a Clock to track reaction time
        response_clock = core.Clock()  # Create a clock for reaction time
      Each Frame:
        from psychopy import event

        # Check if the space key was pressed
        if 'space' in event.getKeys():
            continueRoutine = False  # End the routine

        # Record reaction time when the participant finishes their response
        if 'space' in event.getKeys():
            reaction_time = response_clock.getTime()  # Capture the time at the space key press
            continueRoutine = False  # End the routine when space is pressed
    TextComponent recall_ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Please type all the words you remember in the box below. Press "Space" when done.
    TextboxComponent recall_box
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
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  Routine instructions
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    TextComponent welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will see words presented one by one. Your goal is to remember as many words as possible.

        Some words will be positive, some negative, and some neutral. Try to remember all words, regardless of their type.

        After the presentation, you will be asked to recall as many words as you can.

        Press the space bar to begin.
    KeyboardComponent proceed_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word_stim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Joy'), ('Valence', 'Positive')]),
      OrderedDict([('Word', 'Guilt'), ('Valence', 'Negative')]),
      OrderedDict([('Word', 'Table'), ('Valence', 'Neutral')]),
      OrderedDict([('Word', 'Estatic'), ('Valence', 'Positive')]),
      OrderedDict([('Word', 'Anger'), ('Valence', 'Negative')]),
      OrderedDict([('Word', 'Chair'), ('Valence', 'Neutral')]),
      OrderedDict([('Word', 'Love'), ('Valence', 'Positive')]),
      OrderedDict([('Word', 'Fear'), ('Valence', 'Negative')]),
      OrderedDict([('Word', 'Window'), ('Valence', 'Neutral')])]
    Routine word_presentation
  LoopTerminator trials
  Routine recall_phase
